PsychoPy2experiment version="3.1.0"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = MINT
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Routines
  Routine trial
    ImageComponent image
      image [set every repeat] = $images
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Please say in loud voice the name of the following pictures in the language requested
        Press any key to start
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine goodbye
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text [set every repeat]:
        Thanks for your participation
Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('images', 'images/mano1.png')]),
      OrderedDict([('images', 'images/perro2.png')]),
      OrderedDict([('images', 'images/arbol.png')]),
      OrderedDict([('images', 'images/cama4.png')]),
      OrderedDict([('images', 'images/puerta5.png')]),
      OrderedDict([('images', 'images/sol7.png')]),
      OrderedDict([('images', 'images/libro8.png')]),
      OrderedDict([('images', 'images/mariposa9.png')]),
      OrderedDict([('images', 'images/tijera10.png')]),
      OrderedDict([('images', 'images/llave11.png')]),
      OrderedDict([('images', 'images/silla12.png')]),
      OrderedDict([('images', 'images/luna13.png')]),
      OrderedDict([('images', 'images/avion14.png')]),
      OrderedDict([('images', 'images/manzana15.png')]),
      OrderedDict([('images', 'images/pez16.png')]),
      OrderedDict([('images', 'images/uva17.png')]),
      OrderedDict([('images', 'images/caballo18.png')]),
      OrderedDict([('images', 'images/tambor19.png')]),
      OrderedDict([('images', 'images/guante20.png')]),
      OrderedDict([('images', 'images/ampolleta21.png')]),
      OrderedDict([('images', 'images/torta22.png')]),
      OrderedDict([('images', 'images/reloj23.png')]),
      OrderedDict([('images', 'images/oso24.png')]),
      OrderedDict([('images', 'images/tenedor25.png')]),
      OrderedDict([('images', 'images/gorro26.png')]),
      OrderedDict([('images', 'images/hoja27.png')]),
      OrderedDict([('images', 'images/corbata28.png')]),
      OrderedDict([('images', 'images/vela29.png')]),
      OrderedDict([('images', 'images/canasta30.png')]),
      OrderedDict([('images', 'images/payaso31.png')]),
      OrderedDict([('images', 'images/volantin32.png')])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
    Routine trial
  LoopTerminator trials
  Routine goodbye
